graphs:

- id: Classification
  nodes:
  - id: sub
    module: timeflux.nodes.zmq
    class: Sub
    params:
      topics: [epoched, events ]
  - id: classification
    module: timeflux.nodes.ml
    class: Pipeline
    params:
      mode: predict_proba
      meta_label: [epoch, context, bit]
      event_start_accumulation: calibration_begins
      event_stop_accumulation: calibration_ends
      event_start_training: calibration_ends
      event_reset: reset
      steps:
        - module: timeflux.estimators.transformers.shape
          class: Transpose
          args:
            axes: [0, 2, 1]
        - module: estimators.burst
          class: Scale
        - module: pyriemann.estimation
          class: XdawnCovariances
          args:
            nfilter: 4
            estimator: lwf
            xdawn_estimator: scm
        - module: pyriemann.tangentspace
          class: TangentSpace
          args:
            metric: riemann
        - module: sklearn.discriminant_analysis
          class: LinearDiscriminantAnalysis
          args:
            solver: lsqr
            shrinkage: auto
  - id: predict
    module: nodes.accumulation.simple
    class: AccumulationSteadyPred
    params:
      codes:
      {% for CODE in TASK_CODES.split() %}
        - "{{CODE}}"
      {% endfor %}
      min_buffer_size: {{MIN_BUFFER_LENGTH}}
      max_buffer_size: {{MAX_BUFFER_LENGTH}}
      min_frames_pred: {{MIN_PRED_LENGTH}}
      max_frames_pred: {{MAX_PRED_LENGTH}}
  - id: pub
    module: timeflux.nodes.zmq
    class: Pub
    params:
      topic: predictions
  edges:
    - source: sub:epoched
      target: classification:training
    - source: sub:epoched
      target: classification
    - source: sub:events
      target: classification:events
    - source: sub:events
      target: predict:events
    - source: sub:epoched
      target: classification:training
    - source: classification:events
      target: predict:clf
    - source: predict
      target: pub
  rate: 10

