graphs:

- id: ERP
  nodes:
  - id: sub
    module: timeflux.nodes.zmq
    class: Sub
    params:
      topics: [filtered, events]
  - id: epoch_erp
    module: timeflux.nodes.epoch
    class: Samples
    params:
      trigger: epoch
      length: {{ ERP_LENGTH }}
  - id: accumulate_epochs
    module: nodes.accumulation.erp
    class: ERP
    params:
      buffer_size: {{ ERP_BUFFER_SIZE }}
      verbose: {{ERP_VERBOSE}}
      meta_label: [epoch, context, bit]
      target_label: 1
      non_target_label : 0
      event_start_accumulation: calibration_begins
      event_stop_accumulation: calibration_ends
  - id: pub_erp
    module: timeflux.nodes.zmq
    class: Pub
    params:
      topic: erp
  - id: pub_erp_non_target
    module: timeflux.nodes.zmq
    class: Pub
    params:
      topic: erp_non_target
  edges:
    - source: sub:filtered
      target: epoch_erp
    - source: sub:events
      target: epoch_erp:events
    - source: sub:events
      target: accumulate_epochs:events
    - source: epoch_erp:*
      target: accumulate_epochs
    - source: accumulate_epochs
      target: pub_erp
    - source: accumulate_epochs:non_target
      target: pub_erp_non_target
  rate: 10