graphs:

  - id: Record
    nodes:
    - id: subscribe
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [events, predictions, raw, filtered, epoched]
    - id: save
      module: timeflux.nodes.hdf5
      class: Save
      params:
        path: data
        min_itemsize: 8000
    edges:
      - source: subscribe:events
        target: save:events
      - source: subscribe:predictions
        target: save:predictions
      - source: subscribe:raw
        target: save:raw
      - source: subscribe:filtered
        target: save:filtered
      - source: subscribe:epoched
        target: save:epoched
    rate: 1
